# Generated by Configurator on Wed Apr 10 17:25:10 EDT 2013

# Reset
Property,Core,Initialize,0

# Devices
Device,COM3,SerialManager,COM3
Device,LudlController,Ludl,LudlController
Device,XYStage,Ludl,XYStage

# Pre-init settings for devices
Property,LudlController,Port,COM3

# Pre-init settings for COM ports
Property,COM3,AnswerTimeout,2000.0000
Property,COM3,BaudRate,9600
Property,COM3,DelayBetweenCharsMs,11.0000
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,2
Property,COM3,Verbose,1

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Roles
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

